<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">100.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">5.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Min group size in # of scans">3</parameter>
        <parameter name="Group intensity threshold">50.0</parameter>
        <parameter name="Min highest intensity">10.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Local minimum search">
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            <module name="Local minimum search">
                <parameter name="Chromatographic threshold">1.0E-4</parameter>
                <parameter name="Search minimum in RT range (min)">0.5</parameter>
                <parameter name="Minimum relative height">1.0E-4</parameter>
                <parameter name="Minimum absolute height">100.0</parameter>
                <parameter name="Min ratio of peak top/edge">2.0</parameter>
                <parameter name="Peak duration range (min)">
                    <min>0.05</min>
                    <max>2.0</max>
                </parameter>
            </module>
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        </parameter>
        <parameter measure="AUTO" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="true">0.05</parameter>
        <parameter name="RT range for MS2 scan pairing (min)" selected="true">0.2</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_deisotoper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.3</parameter>
        <parameter name="Monotonic shape">false</parameter>
        <parameter name="Maximum charge">3</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.tools.sortpeaklists.SortPeakListsModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">75.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.3</parameter>
        <parameter name="Weight for RT">25.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">2rowfilter</parameter>
        <parameter name="Minimum peaks in a row" selected="true">2.0</parameter>
        <parameter name="Minimum peaks in an isotope pattern" selected="false"/>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Peak duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Keep only peaks with MS2 scan (GNPS)">false</parameter>
        <parameter name="Reset the peak number ID">true</parameter>
        <parameter name="Remove source feature list after filtering">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.PeakFinderModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">gap-filled</parameter>
        <parameter name="Intensity tolerance">0.15</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.03</parameter>
        <parameter name="RT correction">false</parameter>
        <parameter name="Parallel (never combined with RT correction)">false</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">final</parameter>
        <parameter name="Minimum peaks in a row" selected="true">2.0</parameter>
        <parameter name="Minimum peaks in an isotope pattern" selected="false"/>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Peak duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Keep only peaks with MS2 scan (GNPS)">false</parameter>
        <parameter name="Reset the peak number ID">true</parameter>
        <parameter name="Remove source feature list after filtering">false</parameter>
    </batchstep>
</batch>
